PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = EDE_even
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Routines
  Routine trial
    CodeComponent TrialConditons
      Code Type = Py
      Begin Experiment:
        thisLoop = 0
      Begin Routine:
        thisLoop +=1
    CodeComponent QnTrigger
      Code Type = Py
      Begin Routine:
        if thisLoop%10==0:
            Reps_10.finished=1
    PolygonComponent PurpleFixation
      fillColor = $[138,43,226]
      fillColorSpace = rgb255
      lineColor = $[0,0,0]
      nVertices = 1000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent StimContrastControl
      Code Type = Py
      Begin Routine:
        StimImage.contrast = Contrast
    ImageComponent StimImage
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
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    CodeComponent WhiteFixationDuration
      Code Type = Py
      Begin Routine:
        import random
        WhiteDuration = random.uniform(3,4)
        thisExp.addData('White_random_duration', WhiteDuration)
    PolygonComponent WhiteFixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.8
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    KeyboardComponent Trial_KeyResp
      allowedKeys = 'v','b'
      correctAns = $CorrectResp
      forceEndRoutine = True
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 3.2
      store = first key
      storeCorrect = True
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    CodeComponent MaskBefore2Contrast
      Code Type = Py
      Begin Routine:
        maskbefore2.contrast = Contrast
    ImageComponent maskbefore2
      image [set every repeat] = $Masks
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    CodeComponent MaskAfter2Contrast
      Code Type = Py
      Begin Routine:
        maskafter2.contrast = Contrast
    ImageComponent maskafter2
      image [set every repeat] = $Masks
      size = (0.5, 0.5)
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.3
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  Routine feedback
    CodeComponent RespFeedback
      Code Type = Py
      Begin Routine:
        if key_resp.keys == 'left':
            if StimEmo == 1:
                RespFeedback="Correct"
            else:
                RespFeedback="Incorrect"
        elif key_resp.keys == 'down':
            if StimEmo == 2:
                RespFeedback="Correct"
            else:
                RespFeedback="Incorrect"
        else:
            RespFeedback=""
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $RespFeedback
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    PolygonComponent intertrial_interval
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = $ITI
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  Routine short_break
    TextComponent break_screen
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please take a short break

        Press the SPACE key when you are ready to continue

        Remember to respond as quick and accurate as possible
    KeyboardComponent end_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Exp_Instruction_I
    TextComponent InstructionText1
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
                In this study you will see one of these frames
    KeyboardComponent instruction_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent cue1
      lineColor = magenta
      lineWidth = 10
      pos = (-0.55, 0.1)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent cue2
      lineColor = yellow
      lineWidth = 10
      pos = (0, 0.1)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent cue3
      lineColor = blue
      lineWidth = 10
      pos = (0.55, 0.1)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Exp_Ending
    TextComponent EndingMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation! 
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  Routine Question_condition
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        if ForN ==1:
            Qn_text = 1
        else:
            Qn_text = 0
  Routine Instruction_I
    TextComponent InstructionText2
      color [set every repeat] = $textColor
      font = Arial Block
      letterHeight = 0.04
      pos = (0.26, 0.022)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction_I
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    KeyboardComponent instruction_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent constantText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Followed by a Purple fixation, you will see a face.
        Your task is to indicate if the face is             or not.

        Press the Space bar to Continue.
  Routine Resp_Instruction
    TextComponent changing_text
      color [set every repeat] = $textColor
      letterHeight = 0.05
      pos = (0.12, 0.14)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction_I
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    TextComponent changing_text_2
      color [set every repeat] = $textColor
      letterHeight = 0.05
      pos = (0.16, 0.09)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Instruction2
    TextComponent Constant_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Press 'V' if Yes, the face is
        Press 'B' if No, the face is
        Please use your dominant hand only.

        Respond as quick and accurate as possible.

        When you are ready, press the Space bar to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine QnRating
    TextComponent text
      color [set every repeat] = $Color
      letterHeight = 0.04
      pos = (-0.01, 0.245)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Questionnaire
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    TextComponent constantText_Qn
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Based on the past 10 trials,
        What percentage of                        are in the image set?

        Click on the scale below. To submit your response, please click on the number shown in the box.
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 100
      labels = 0%, 100%
      low = 0
      pos = [0,-0.2]
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine BlockStopper
    CodeComponent countBlock
      Code Type = Py
      Begin Experiment:
        thisBlock = 0
      Begin Routine:
        thisBlock+=1
    CodeComponent StopWhen
      Code Type = Py
      Begin Routine:
        if thisBlock%5==0:
            Single_Block.finished=1
  Routine PracticeTrialTrigger
    CodeComponent code_3
      Code Type = Py
  Routine PracticeTrial
    CodeComponent TrialConditons_2
      Code Type = Py
      Begin Experiment:
        thisLoop_p = 0
      Begin Routine:
        thisLoop_p +=1
    CodeComponent QnTrigger_2
      Code Type = Py
      Begin Routine:
        if thisLoop_p%10==0:
            PracticeTrials.finished=1
    PolygonComponent PurpleFixation_2
      fillColor = $[138,43,226]
      fillColorSpace = rgb255
      lineColor = $[0,0,0]
      nVertices = 1000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent StimContrastControl_2
      Code Type = Py
      Begin Routine:
        StimImage_2.contrast = Contrast
    ImageComponent StimImage_2
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
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    CodeComponent WhiteFixationDuration_2
      Code Type = Py
      Begin Routine:
        import random
        WhiteDuration = random.uniform(3,4)
        thisExp.addData('White_random_duration_p', WhiteDuration)
    PolygonComponent WhiteFixation_2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.8
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    KeyboardComponent key_resp_3
      allowedKeys = 'v','b'
      correctAns = $CorrectResp
      forceEndRoutine = True
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 3.2
      store = first key
      storeCorrect = True
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    CodeComponent MaskBeforeContrast
      Code Type = Py
      Begin Routine:
        maskbefore.contrast = Contrast
    ImageComponent maskbefore
      image [set every repeat] = $Masks
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    ImageComponent maskafter
      image [set every repeat] = $Masks
      size = (0.5, 0.5)
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.3
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    CodeComponent MaskAfterContrast
      Code Type = Py
      Begin Routine:
        maskafter.contrast = Contrast
  Routine practice_text
    TextComponent prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will start with a practice round!
        Press the Space bar to Continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ActualRun
    TextComponent ActualR_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, let's begin with the actual rounds!
        Press the space bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine trialb
    CodeComponent TrialConditonsb
      Code Type = Py
      Begin Experiment:
        thisLoopb = 0
      Begin Routine:
        thisLoopb +=1
    CodeComponent QnTriggerb
      Code Type = Py
      Begin Routine:
        if thisLoopb%10==0:
            Reps_10b.finished=1
    PolygonComponent PurpleFixationb
      fillColor = $[138,43,226]
      fillColorSpace = rgb255
      lineColor = $[0,0,0]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent StimContrastControlb
      Code Type = Py
      Begin Routine:
        StimImageb.contrast = Contrast
    ImageComponent StimImageb
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
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    CodeComponent WhiteFixationDurationb
      Code Type = Py
      Begin Routine:
        import random
        WhiteDurationb = random.uniform(3,4)
        thisExp.addData('White_random_duration', WhiteDurationb)
    PolygonComponent WhiteFixationb
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.8
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    KeyboardComponent Trial_KeyRespb
      allowedKeys = 'v','b'
      correctAns = $CorrectResp
      forceEndRoutine = True
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 3.2
      store = first key
      storeCorrect = True
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    CodeComponent MaskBeforebContrast
      Code Type = Py
      Begin Routine:
        maskbeforeb.contrast = Contrast
    ImageComponent maskbeforeb
      image [set every repeat] = $Masks
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
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    CodeComponent MaskAfterbContrast
      Code Type = Py
      Begin Routine:
        maskafterb.contrast = Contrast
    ImageComponent maskafterb
      image [set every repeat] = $Masks
      size = (0.5, 0.5)
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.3
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  Routine BlockStopperb
    CodeComponent countBlockb
      Code Type = Py
      Begin Experiment:
        thisBlockb = 0
      Begin Routine:
        thisBlockb+=1
    CodeComponent StopWhenb
      Code Type = Py
      Begin Routine:
        if thisBlockb%5==0:
            Single_Blockb.finished=1
  Routine Exp_Instruction_Begin
    TextComponent Beginning_Instruction
      letterHeight = 0.04
      pos = (0.01, 0)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment!

        There are many fearful face and neutral face images stored in the computer database.Each time the computer program will randomly select 30 face images.You will see 10 of these 30 face images.

        For each of the 10 images, you will identify the emotion of the face.After viewing all 10 faces, you will be asked to estimate what percentage of the 30 faces are fearful or neutral based on the 10 faces you have seen.

        Press the Space bar to Continue.
    KeyboardComponent next_frame
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Exp_Instruction_Begin
  Routine practice_text
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = Practice_even.xlsx
    loopType = sequential
    nReps = 1
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    Routine Instruction_I
    Routine Resp_Instruction
    LoopInitiator PracticeTrials loopType="TrialHandler"
      Selected rows = $str(thisLoop_p)+":"+str(thisLoop_p+10)
      conditionsFile = TrialType_p_even.xlsx
      loopType = sequential
      nReps = 10
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      Routine PracticeTrial
    LoopTerminator PracticeTrials
    Routine QnRating
  LoopTerminator Practice
  Routine ActualRun
  LoopInitiator BlockSequence1 loopType="TrialHandler"
    conditionsFile = FNF_even.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNo', 1), ('ForN', 1), ('Instruction_I', 'Fearful'), ('textColor', 'DarkRed'), ('Instruction2', 'Not Fearful')]),
      OrderedDict([('BlockNo', 2), ('ForN', 2), ('Instruction_I', 'Neutral '), ('textColor', 'blue'), ('Instruction2', 'Not Neutral')]),
      OrderedDict([('BlockNo', 3), ('ForN', 1), ('Instruction_I', 'Fearful'), ('textColor', 'DarkRed'), ('Instruction2', 'Not Fearful')])]
    Routine Instruction_I
    Routine Resp_Instruction
    LoopInitiator Single_Block loopType="TrialHandler"
      Selected rows = $str(thisBlock)+":"+str(thisBlock+5)
      conditionsFile = Qn_FNF.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')])]
      Routine BlockStopper
      LoopInitiator Reps_10 loopType="TrialHandler"
        Selected rows = $str(thisLoop)+":"+str(thisLoop+10)
        conditionsFile = AsianTrials1.xlsx
        loopType = sequential
        nReps = 10
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        conditions:
          [OrderedDict([('TrialNo', 1), ('Stimuli', 'F18'), ('Contrast', 0.103), ('CorrectResp', 'left'), ('StimImageFile', 'ImageStimuli/F18.jpg'), ('StimEmo', 1)]),
          OrderedDict([('TrialNo', 2), ('Stimuli', 'F14'), ('Contrast', 0.138), ('CorrectResp', 'left'), ('StimImageFile', 'ImageStimuli/F14.jpg'), ('StimEmo', 1)]),
          OrderedDict([('TrialNo', 3), ('Stimuli', 'F8'), ('Contrast', 0.155), ('CorrectResp', 'left'), ('StimImageFile', 'ImageStimuli/F8.jpg'), ('StimEmo', 1)]),
          OrderedDict([('TrialNo', 4), ('Stimuli', 'N18'), ('Contrast', 0.103), ('CorrectResp', 'down'), ('StimImageFile', 'ImageStimuli/N18.jpg'), ('StimEmo', 2)]),
          OrderedDict([('TrialNo', 5), ('Stimuli', 'F15'), ('Contrast', 0.124), ('CorrectResp', 'left'), ('StimImageFile', 'ImageStimuli/F15.jpg'), ('StimEmo', 1)]),
          OrderedDict([('TrialNo', 6), ('Stimuli', 'N14'), ('Contrast', 0.169), ('CorrectResp', 'down'), ('StimImageFile', 'ImageStimuli/N14.jpg'), ('StimEmo', 2)]),
          OrderedDict([('TrialNo', 7), ('Stimuli', 'N17'), ('Contrast', 0.192), ('CorrectResp', 'down'), ('StimImageFile', 'ImageStimuli/N17.jpg'), ('StimEmo', 2)]),
          OrderedDict([('TrialNo', 8), ('Stimuli', 'N13'), ('Contrast', 0.107), ('CorrectResp', 'down'), ('StimImageFile', 'ImageStimuli/N13.jpg'), ('StimEmo', 2)]),
          OrderedDict([('TrialNo', 9), ('Stimuli', 'N11'), ('Contrast', 0.135), ('CorrectResp', 'down'), ('StimImageFile', 'ImageStimuli/N11.jpg'), ('StimEmo', 2)])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
        Routine trial
      LoopTerminator Reps_10
      Routine QnRating
    LoopTerminator Single_Block
  LoopTerminator BlockSequence1
  Routine short_break
  LoopInitiator BlockSequence2 loopType="TrialHandler"
    conditionsFile = NFN_even.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNo', 4), ('ForN', 2), ('Instruction_I', 'Neutral '), ('textColor', 'blue'), ('Instruction2', 'Not Neutral')]),
      OrderedDict([('BlockNo', 5), ('ForN', 1), ('Instruction_I', 'Fearful'), ('textColor', 'DarkRed'), ('Instruction2', 'Not Fearful')]),
      OrderedDict([('BlockNo', 6), ('ForN', 2), ('Instruction_I', 'Neutral '), ('textColor', 'blue'), ('Instruction2', 'Not Neutral')])]
    Routine Instruction_I
    Routine Resp_Instruction
    LoopInitiator Single_Blockb loopType="TrialHandler"
      Selected rows = $str(thisBlockb)+":"+str(thisBlockb+5)
      conditionsFile = Qn_NFN.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Fearful Face'), ('Color', 'red')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')]),
        OrderedDict([('Questionnaire', 'Neutral Face'), ('Color', 'blue')])]
      Routine BlockStopperb
      LoopInitiator Reps_10b loopType="TrialHandler"
        Selected rows = $str(thisLoopb)+":"+str(thisLoopb+10)
        conditionsFile = AsianTrials2.xlsx
        loopType = sequential
        nReps = 10
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        conditions:
          [OrderedDict([('TrialNo', 1), ('Stimuli', 'N2'), ('Contrast', 0.135488572367467), ('CorrectResp', 'v'), ('StimImageFile', 'ImageStimuli/N2.jpg'), ('StimEmo', 2), ('Sex', 'M')]),
          OrderedDict([('TrialNo', 2), ('Stimuli', 'N8'), ('Contrast', 0.169485838920809), ('CorrectResp', 'v'), ('StimImageFile', 'ImageStimuli/N8.jpg'), ('StimEmo', 2), ('Sex', 'M')]),
          OrderedDict([('TrialNo', 3), ('Stimuli', 'F7'), ('Contrast', 0.153828864917159), ('CorrectResp', 'b'), ('StimImageFile', 'ImageStimuli/F7.jpg'), ('StimEmo', 1), ('Sex', 'M')]),
          OrderedDict([('TrialNo', 4), ('Stimuli', 'F2'), ('Contrast', 0.166122701345012), ('CorrectResp', 'b'), ('StimImageFile', 'ImageStimuli/F2.jpg'), ('StimEmo', 1), ('Sex', 'M')]),
          OrderedDict([('TrialNo', 5), ('Stimuli', 'F1'), ('Contrast', 0.152940350072458), ('CorrectResp', 'b'), ('StimImageFile', 'ImageStimuli/F1.jpg'), ('StimEmo', 1), ('Sex', 'M')]),
          OrderedDict([('TrialNo', 6), ('Stimuli', 'N15'), ('Contrast', 0.179144993494265), ('CorrectResp', 'v'), ('StimImageFile', 'ImageStimuli/N15.jpg'), ('StimEmo', 2), ('Sex', 'F')]),
          OrderedDict([('TrialNo', 7), ('Stimuli', 'F12'), ('Contrast', 0.178327387361787), ('CorrectResp', 'b'), ('StimImageFile', 'ImageStimuli/F12.jpg'), ('StimEmo', 1), ('Sex', 'F')]),
          OrderedDict([('TrialNo', 8), ('Stimuli', 'F2'), ('Contrast', 0.16571210087277), ('CorrectResp', 'b'), ('StimImageFile', 'ImageStimuli/F2.jpg'), ('StimEmo', 1), ('Sex', 'M')])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
        Routine trialb
      LoopTerminator Reps_10b
      Routine QnRating
    LoopTerminator Single_Blockb
  LoopTerminator BlockSequence2
  Routine Exp_Ending
